<?xml version="1.0" encoding="UTF-8"?>
<configuration>
    <version>2</version>

    <readers>
        <reader>
            <dll>gadgetron_core_readers</dll>
            <classname>AcquisitionReader</classname>
        </reader>
        <reader>
            <dll>gadgetron_core_readers</dll>
            <classname>WaveformReader</classname>
        </reader>
    </readers>

    <writers>
        <writer>
            <dll>gadgetron_core_writers</dll>
            <classname>ImageWriter</classname>
        </writer>
    </writers>

    <stream> 

       <gadget>
            <dll>gadgetron_mricore</dll>
            <classname>NoiseAdjustGadget</classname>
        </gadget>
        
          <!-- EPI correction -->
     <gadget>
        <name>ReconX</name>
        <dll>gadgetron_epi</dll>
        <classname>EPIReconXGadget</classname>
     </gadget>

     <gadget>
        <name>EPICorr</name>
        <dll>gadgetron_epi</dll>
        <classname>EPICorrGadget</classname>
     </gadget>

     <gadget>
        <name>FFTX</name>
        <dll>gadgetron_epi</dll>
        <classname>FFTXGadget</classname>
     </gadget>

     <gadget>
        <name>OneEncodingSpace</name>
        <dll>gadgetron_epi</dll>
        <classname>OneEncodingGadget</classname>
      </gadget>


       <!-- Data accumulation and trigger gadget -->
    <gadget>
        <name>AccTrig</name>
        <dll>gadgetron_mricore</dll>
        <classname>AcquisitionAccumulateTriggerGadget</classname>
        <property><name>trigger_dimension</name><value>repetition</value></property>
        <property><name>sorting_dimension</name><value></value></property>
    </gadget>

      <gadget>
        <name>BucketToBuffer</name>
        <dll>gadgetron_mricore</dll>
        <classname>BucketToBufferGadget</classname>
        <property><name>N_dimension</name><value>contrast</value></property>
        <property><name>S_dimension</name><value>average</value></property>
        <property><name>split_slices</name><value>false</value></property>
        <property><name>ignore_segment</name><value>true</value></property>
     </gadget>

        <external>
            <execute name="my_first_data_buffered_python_gadget" target="SimpleDataBufferedPythonGadget" type="python"/>
            <configuration/>
        </external>
 
    </stream>

</configuration>
