<?xml version="1.0" encoding="UTF-8"?>
<configuration>
    <version>2</version>

    <readers>
        <reader>
            <dll>gadgetron_core_readers</dll>
            <classname>AcquisitionReader</classname>
        </reader>
        <reader>
            <dll>gadgetron_core_readers</dll>
            <classname>WaveformReader</classname>
        </reader>
    </readers>

    <writers>
        <writer>
            <dll>gadgetron_core_writers</dll>
            <classname>ImageWriter</classname>
        </writer>
    </writers>

    <stream> 

        <gadget>
            <dll>gadgetron_mricore</dll>
            <classname>NoiseAdjustGadget</classname>
        </gadget>


        <!-- Data accumulation and trigger gadget -->
    <gadget>
        <name>RemoveROOversampling</name>
        <dll>gadgetron_mricore</dll>
        <classname>RemoveROOversamplingGadget</classname>
    </gadget>

    <gadget>
        <name>AccTrig</name>
        <dll>gadgetron_mricore</dll>
        <classname>AcquisitionAccumulateTriggerGadget</classname>
        <property>
            <name>trigger_dimension</name>
            <value>repetition</value>
        </property>
        <property>
          <name>sorting_dimension</name>
          <value>slice</value>
        </property>
    </gadget>

    <gadget>
        <name>Buff</name>
        <dll>gadgetron_mricore</dll>
        <classname>BucketToBufferGadget</classname>
        <property>
            <name>N_dimension</name>
            <value></value>
        </property>
        <property>
          <name>S_dimension</name>
          <value></value>
        </property>
        <property>
          <name>split_slices</name>
          <value>true</value>
        </property>
    </gadget>


    <gadget>
          <name>SimpleRecon</name>
          <dll>gadgetron_mricore</dll>
          <classname>SimpleReconGadget</classname>
    </gadget>

    <gadget>
          <name>ImageArraySplit</name>
          <dll>gadgetron_mricore</dll>
          <classname>ImageArraySplitGadget</classname>
    </gadget>

    <external>
            <execute name="nifti_python" target="IsmrmrdToNiftiGadget" type="python"/>
            <configuration/>
    </external> 

  </stream>

</configuration>
