<?xml version="1.0" encoding="UTF-8"?>
<configuration>
    <version>2</version>

    <readers>
        <reader>
            <dll>gadgetron_core_readers</dll>
            <classname>AcquisitionReader</classname>
        </reader>
        <reader>
            <dll>gadgetron_core_readers</dll>
            <classname>WaveformReader</classname>
        </reader>
    </readers>

    <writers>
        <writer>
            <dll>gadgetron_core_writers</dll>
            <classname>ImageWriter</classname>
        </writer>
    </writers>

    <stream>
        <gadget>
            <dll>gadgetron_mricore</dll>
            <classname>NoiseAdjustGadget</classname>
        </gadget>

        <gadget>
            <dll>gadgetron_mricore</dll>
            <classname>RemoveROOversamplingGadget</classname>
        </gadget>

        <gadget>
          <name>PCA</name>
          <dll>gadgetron_mricore</dll>
          <classname>PCACoilGadget</classname>
        </gadget>

        <gadget>
          <name>CoilReduction</name>
          <dll>gadgetron_mricore</dll>
          <classname>CoilReductionGadget</classname>
          <property name="coils_out" value="8"/>
        </gadget>

        <gadget>
            <dll>gadgetron_mricore</dll>
            <classname>AcquisitionAccumulateTriggerGadget</classname>
            <property name="trigger_dimension" value="repetition"/>
        </gadget>

        <gadget>
            <dll>gadgetron_mricore</dll>
            <classname>BucketToBufferGadget</classname>
            <property><name>N_dimension</name><value>contrast</value></property>
            <property><name>S_dimension</name><value>average</value></property>
            <property><name>split_slices</name><value>false</value></property>
            <property><name>ignore_segment</name><value>true</value></property>
            <property><name>verbose</name><value>true</value></property>
        </gadget>

        <external>
            <execute name="gadgetron.custom.MP2RAGE_bufferrecon" type="matlab"/>
            <configuration/>
        </external>
        
         <gadget>
            <name>Extract</name>
            <dll>gadgetron_mricore</dll>
            <classname>ExtractGadget</classname>
        </gadget>


    </stream>
</configuration>
