<?xml version="1.0" encoding="UTF-8"?>
<configuration>
    <version>2</version>

    <readers>
        <reader>
            <dll>gadgetron_core_readers</dll>
            <classname>AcquisitionReader</classname>
        </reader>
        <reader>
            <dll>gadgetron_core_readers</dll>
            <classname>WaveformReader</classname>
        </reader>
    </readers>

    <writers>
        <writer>
            <dll>gadgetron_core_writers</dll>
            <classname>ImageWriter</classname>
        </writer>
    </writers>

    <stream>
        <gadget>
            <dll>gadgetron_mricore</dll>
            <classname>NoiseAdjustGadget</classname>
        </gadget>

        <gadget>
            <dll>gadgetron_mricore</dll>
            <classname>RemoveROOversamplingGadget</classname>
        </gadget>

        <gadget>
          <name>PCA</name>
          <dll>gadgetron_mricore</dll>
          <classname>PCACoilGadget</classname>
        </gadget>

        <gadget>
          <name>CoilReduction</name>
          <dll>gadgetron_mricore</dll>
          <classname>CoilReductionGadget</classname>
          <property name="coils_out" value="4"/>
        </gadget>
    
        <external>
            <!-- Connect to a running process on port 18000. -->
            <connect port="18000"/>

            <!-- The configuration is sent to the external process. It's left pretty empty here. -->
            <configuration/>
        </external>
        
         <gadget>
            <name>AccTrig</name>
            <dll>gadgetron_mricore</dll>
            <classname>AcquisitionAccumulateTriggerGadget</classname>
            <!--
            <property name="trigger_dimension" value="n_acquisitions"/>
            <property>
                <name>n_acquisitions_before_trigger</name>
                <value>160</value>
            </property>  
            -->
        </gadget>
       
        <gadget>
            <name>BucketToBuffer</name>
            <dll>gadgetron_mricore</dll>
            <classname>BucketToBufferGadget</classname>
            <property><name>N_dimension</name><value>phase</value></property>
            <property><name>S_dimension</name><value>set</value></property>
            <property><name>split_slices</name><value>false</value></property>
            <property><name>ignore_segment</name><value>true</value></property>
            <property><name>verbose</name><value>true</value></property>
        </gadget>
        
    <gadget>
        <name>CPUGriddingRecon</name>
        <dll>gadgetron_mri_noncartesian</dll>
        <classname>CPUGriddingReconGadget</classname>
        <property><name>verbose</name><value>true</value></property>	
        <property><name>perform_timing</name><value>true</value></property>
				
	<!-- Ignore gridding weights, iterate instead -->
        <property><name>kernel_width</name><value>5.5</value></property>
        <property><name>gridding_oversampling_factor</name><value>2</value></property>
		<property><name>iterate</name><value>true</value></property>
        <property><name>iteration_max</name><value>20</value></property>
	    <property><name>iteration_tol</name><value>1e-7</value></property>
        
        
        <property><name>verbose</name><value>true</value></property>
    </gadget>

    <!-- ImageArray to images -->
    <gadget>
        <name>ImageArraySplit</name>
        <dll>gadgetron_mricore</dll>
        <classname>ImageArraySplitGadget</classname>
    </gadget>
    
        <gadget>
            <name>Extract</name>
            <dll>gadgetron_mricore</dll>
            <classname>ExtractGadget</classname>
        </gadget>

        <gadget>
            <name>ImageFinish</name>
            <dll>gadgetron_mricore</dll>
            <classname>ImageFinishGadget</classname>
        </gadget>
    </stream>
</configuration>
